<?xml version="1.0"?>
<!--
This CellML file was generated on 21/08/2007 at 17:38:21 using:

COR (0.9.31.751)
Copyright 2002-2007 Dr Alan Garny
http://COR.physiol.ox.ac.uk/ - COR@physiol.ox.ac.uk

CellML 1.0 was used to generate this cellular model
http://www.CellML.org/
--><model xmlns="http://www.cellml.org/cellml/1.0#" xmlns:bqs="http://www.cellml.org/bqs/1.0#" xmlns:cellml="http://www.cellml.org/cellml/1.0#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#" xmlns:dc="http://purl.org/dc/elements/1.1/" xmlns:dcterms="http://purl.org/dc/terms/" xmlns:ns7="http://www.cellml.org/metadata/simulation/1.0#" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" xml:base="file:///D:/noble_1962/noble_1962.cellml" cmeta:id="noble_1962" name="noble_1962">
   
<documentation xmlns="http://cellml.org/tmp-documentation">
<article>
  <articleinfo>
  <title>Noble Purkinje Fibre Model 1962</title>
  <author>
    <firstname>Catherine</firstname>
          <surname>Lloyd</surname>
    <affiliation>
      <shortaffil>Auckland Bioengineering Institute, The University of Auckland</shortaffil>
    </affiliation>
  </author>
</articleinfo>
  <section id="sec_status">
    <title>Model Status</title>
    <para>
      This CellML model runs in COR, JSim and OpenCell to recreate the published results. The units have been checked and they are consistent. 
</para>
  </section>
  <sect1 id="sec_structure">
<title>Model Structure</title>

<para>
In 1962, Denis Noble published one of the first mathematical models of a cardiac cell.  By adapting the equations of the original Hodgkin-Huxley squid axon model (1952), Noble described the long lasting action and pace-maker potentials of the Purkinje fibres of the heart.  The potassium-current equations differ from those of Hodgkin and Huxley in that the potassium ions are assumed to flow through two types of channel in the membrane.  By contrast, the sodium current equations are very similar to those of Hodgkin and Huxley.
</para>

<para>
The main failure of the Noble (1962) model is that it only includes one voltage gated inward current, I<subscript>Na</subscript>.  Calcium currents had not yet been discovered, but there was a clue in the model that something was missing.  The only way the model could be made to work was to greatly extend the voltage range of the sodium current by reducing the voltage dependence of the sodium activation process.  In effect the sodium current was made to serve the function of both the sodium and the calcium channels as far as the plateau is concerned.  There was a clear experimental prediction: either sodium channels in the heart are quantitatively different from those in neurons, or other inward current-carrying channels must exist.  Both predictions are correct.
</para>

<para>
The original paper reference is cited below:
</para>

<para>
A Modification of the Hodgkin-Huxley Equations Applicable to Purkinje Fibre Action and Pace-maker Potentials, Noble, D. 1962 
            <emphasis>Journal of Physiology</emphasis>
          , 160, 317-352.  <ulink url="http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?cmd=Retrieve&amp;db=PubMed&amp;list_uids=14480151&amp;dopt=Abstract">PubMed ID: 14480151</ulink>
</para>

<informalfigure float="0" id="fig_reaction_diagram">
<mediaobject>
  <imageobject>
    <objectinfo>
      <title>model diagram</title>
    </objectinfo>
    <imagedata fileref="hodgkin_1952.png"/>
  </imageobject>
</mediaobject>
<caption>A schematic cell diagram describing the current flows across the cell membrane that are captured in the Noble 1962 model.  Note that this image is identical to the schematic diagram which describes the Hodgkin-Huxley 1952 model.  This is because the Noble 1962 model is based on the HH 1952 model, and the ony differences are in the parameters of the model, and also the gating of the potassium channel - and these differences do not show in the schematic diagram.</caption>
</informalfigure>

</sect1>
</article>
</documentation>

   <units name="per_second">
      <unit exponent="-1" units="second"/>
   </units>
   <units name="millivolt">
      <unit prefix="milli" units="volt"/>
   </units>
   <units name="per_millivolt">
      <unit exponent="-1" prefix="milli" units="volt"/>
   </units>
   <units name="per_millivolt_second">
      <unit exponent="-1" units="millivolt"/>
      <unit exponent="-1" units="second"/>
   </units>
   <units name="microS">
      <unit prefix="micro" units="siemens"/>
   </units>
   <units name="microF">
      <unit prefix="micro" units="farad"/>
   </units>
   <units name="nanoA">
      <unit prefix="nano" units="ampere"/>
   </units>
   <component name="environment">
      <variable cmeta:id="environment_time" name="time" public_interface="out" units="second"/>
   </component>
   <component cmeta:id="id_00001" name="membrane">
      <variable cmeta:id="membrane_V" initial_value="-87" name="V" public_interface="out" units="millivolt"/>
      <variable initial_value="12" name="Cm" units="microF"/>
      <variable name="time" public_interface="in" units="second"/>
      <variable name="i_Na" public_interface="in" units="nanoA"/>
      <variable name="i_K" public_interface="in" units="nanoA"/>
      <variable name="i_Leak" public_interface="in" units="nanoA"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>V</ci>
            </apply>
            <apply>
               <divide/>
               <apply>
                  <minus/>
                  <apply>
                     <plus/>
                     <ci>i_Na</ci>
                     <ci>i_K</ci>
                     <ci>i_Leak</ci>
                  </apply>
               </apply>
               <ci>Cm</ci>
            </apply>
         </apply>
      </math>
   </component>
   <component cmeta:id="id_00002" name="sodium_channel">
      <variable cmeta:id="sodium_channel_i_Na" name="i_Na" public_interface="out" units="nanoA"/>
      <variable initial_value="400000" name="g_Na_max" units="microS"/>
      <variable name="g_Na" units="microS"/>
      <variable initial_value="40" name="E_Na" units="millivolt"/>
      <variable name="time" private_interface="out" public_interface="in" units="second"/>
      <variable name="V" private_interface="out" public_interface="in" units="millivolt"/>
      <variable name="m" private_interface="in" units="dimensionless"/>
      <variable name="h" private_interface="in" units="dimensionless"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>g_Na</ci>
            <apply>
               <times/>
               <apply>
                  <power/>
                  <ci>m</ci>
                  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">3</cn>
               </apply>
               <ci>h</ci>
               <ci>g_Na_max</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>i_Na</ci>
            <apply>
               <times/>
               <apply>
                  <plus/>
                  <ci>g_Na</ci>
                  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="microS">140</cn>
               </apply>
               <apply>
                  <minus/>
                  <ci>V</ci>
                  <ci>E_Na</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component cmeta:id="id_00003" name="sodium_channel_m_gate">
      <variable initial_value="0.01" name="m" public_interface="out" units="dimensionless"/>
      <variable name="alpha_m" units="per_second"/>
      <variable name="beta_m" units="per_second"/>
      <variable name="V" public_interface="in" units="millivolt"/>
      <variable name="time" public_interface="in" units="second"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>alpha_m</ci>
            <apply>
               <divide/>
               <apply>
                  <times/>
                  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="per_millivolt_second">100</cn>
                  <apply>
                     <minus/>
                     <apply>
                        <minus/>
                        <ci>V</ci>
                     </apply>
                     <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millivolt">48</cn>
                  </apply>
               </apply>
               <apply>
                  <minus/>
                  <apply>
                     <exp/>
                     <apply>
                        <divide/>
                        <apply>
                           <minus/>
                           <apply>
                              <minus/>
                              <ci>V</ci>
                           </apply>
                           <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millivolt">48</cn>
                        </apply>
                        <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millivolt">15</cn>
                     </apply>
                  </apply>
                  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>beta_m</ci>
            <apply>
               <divide/>
               <apply>
                  <times/>
                  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="per_millivolt_second">120</cn>
                  <apply>
                     <plus/>
                     <ci>V</ci>
                     <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millivolt">8</cn>
                  </apply>
               </apply>
               <apply>
                  <minus/>
                  <apply>
                     <exp/>
                     <apply>
                        <divide/>
                        <apply>
                           <plus/>
                           <ci>V</ci>
                           <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millivolt">8</cn>
                        </apply>
                        <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millivolt">5</cn>
                     </apply>
                  </apply>
                  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>m</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <times/>
                  <ci>alpha_m</ci>
                  <apply>
                     <minus/>
                     <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn>
                     <ci>m</ci>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <ci>beta_m</ci>
                  <ci>m</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component cmeta:id="id_00004" name="sodium_channel_h_gate">
      <variable initial_value="0.8" name="h" public_interface="out" units="dimensionless"/>
      <variable name="alpha_h" units="per_second"/>
      <variable name="beta_h" units="per_second"/>
      <variable name="V" public_interface="in" units="millivolt"/>
      <variable name="time" public_interface="in" units="second"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>alpha_h</ci>
            <apply>
               <times/>
               <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="per_second">170</cn>
               <apply>
                  <exp/>
                  <apply>
                     <divide/>
                     <apply>
                        <minus/>
                        <apply>
                           <minus/>
                           <ci>V</ci>
                        </apply>
                        <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millivolt">90</cn>
                     </apply>
                     <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millivolt">20</cn>
                  </apply>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>beta_h</ci>
            <apply>
               <divide/>
               <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="per_second">1000</cn>
               <apply>
                  <plus/>
                  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn>
                  <apply>
                     <exp/>
                     <apply>
                        <divide/>
                        <apply>
                           <minus/>
                           <apply>
                              <minus/>
                              <ci>V</ci>
                           </apply>
                           <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millivolt">42</cn>
                        </apply>
                        <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millivolt">10</cn>
                     </apply>
                  </apply>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>h</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <times/>
                  <ci>alpha_h</ci>
                  <apply>
                     <minus/>
                     <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn>
                     <ci>h</ci>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <ci>beta_h</ci>
                  <ci>h</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component cmeta:id="id_00005" name="potassium_channel">
      <variable cmeta:id="potassium_channel_i_K" name="i_K" public_interface="out" units="nanoA"/>
      <variable name="g_K1" units="microS"/>
      <variable name="g_K2" units="microS"/>
      <variable name="time" private_interface="out" public_interface="in" units="second"/>
      <variable name="V" private_interface="out" public_interface="in" units="millivolt"/>
      <variable name="n" private_interface="in" units="dimensionless"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>i_K</ci>
            <apply>
               <times/>
               <apply>
                  <plus/>
                  <ci>g_K1</ci>
                  <ci>g_K2</ci>
               </apply>
               <apply>
                  <plus/>
                  <ci>V</ci>
                  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millivolt">100</cn>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>g_K1</ci>
            <apply>
               <plus/>
               <apply>
                  <times/>
                  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="microS">1200</cn>
                  <apply>
                     <exp/>
                     <apply>
                        <divide/>
                        <apply>
                           <minus/>
                           <apply>
                              <minus/>
                              <ci>V</ci>
                           </apply>
                           <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millivolt">90</cn>
                        </apply>
                        <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millivolt">50</cn>
                     </apply>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="microS">15</cn>
                  <apply>
                     <exp/>
                     <apply>
                        <divide/>
                        <apply>
                           <plus/>
                           <ci>V</ci>
                           <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millivolt">90</cn>
                        </apply>
                        <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millivolt">60</cn>
                     </apply>
                  </apply>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>g_K2</ci>
            <apply>
               <times/>
               <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="microS">1200</cn>
               <apply>
                  <power/>
                  <ci>n</ci>
                  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">4</cn>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component cmeta:id="id_00006" name="potassium_channel_n_gate">
      <variable initial_value="0.01" name="n" public_interface="out" units="dimensionless"/>
      <variable name="alpha_n" units="per_second"/>
      <variable name="beta_n" units="per_second"/>
      <variable name="V" public_interface="in" units="millivolt"/>
      <variable name="time" public_interface="in" units="second"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>alpha_n</ci>
            <apply>
               <divide/>
               <apply>
                  <times/>
                  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="per_millivolt_second">0.1</cn>
                  <apply>
                     <minus/>
                     <apply>
                        <minus/>
                        <ci>V</ci>
                     </apply>
                     <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millivolt">50</cn>
                  </apply>
               </apply>
               <apply>
                  <minus/>
                  <apply>
                     <exp/>
                     <apply>
                        <divide/>
                        <apply>
                           <minus/>
                           <apply>
                              <minus/>
                              <ci>V</ci>
                           </apply>
                           <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millivolt">50</cn>
                        </apply>
                        <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millivolt">10</cn>
                     </apply>
                  </apply>
                  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>beta_n</ci>
            <apply>
               <times/>
               <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="per_second">2</cn>
               <apply>
                  <exp/>
                  <apply>
                     <divide/>
                     <apply>
                        <minus/>
                        <apply>
                           <minus/>
                           <ci>V</ci>
                        </apply>
                        <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millivolt">90</cn>
                     </apply>
                     <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millivolt">80</cn>
                  </apply>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>n</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <times/>
                  <ci>alpha_n</ci>
                  <apply>
                     <minus/>
                     <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn>
                     <ci>n</ci>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <ci>beta_n</ci>
                  <ci>n</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component cmeta:id="id_00007" name="leakage_current">
      <variable cmeta:id="leakage_current_i_Leak" name="i_Leak" public_interface="out" units="nanoA"/>
      <variable initial_value="75" name="g_L" units="microS"/>
      <variable initial_value="-60" name="E_L" units="millivolt"/>
      <variable name="time" public_interface="in" units="second"/>
      <variable name="V" public_interface="in" units="millivolt"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>i_Leak</ci>
            <apply>
               <times/>
               <ci>g_L</ci>
               <apply>
                  <minus/>
                  <ci>V</ci>
                  <ci>E_L</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <group>
      <relationship_ref relationship="containment"/>
      <component_ref component="membrane" cmeta:id="id_00009">
         <component_ref component="sodium_channel" cmeta:id="id_00010">
            <component_ref component="sodium_channel_m_gate" cmeta:id="id_00011"/>
            <component_ref component="sodium_channel_h_gate" cmeta:id="id_00012"/>
         </component_ref>
         <component_ref component="potassium_channel" cmeta:id="id_00013">
            <component_ref component="potassium_channel_n_gate" cmeta:id="id_00018"/>
         </component_ref>
         <component_ref component="leakage_current" cmeta:id="id_00008"/>
      </component_ref>
   </group>
   <group>
      <relationship_ref relationship="encapsulation"/>
      <component_ref component="sodium_channel" cmeta:id="id_00013">
         <component_ref component="sodium_channel_m_gate" cmeta:id="id_00014"/>
         <component_ref component="sodium_channel_h_gate" cmeta:id="id_00015"/>
      </component_ref>
      <component_ref component="potassium_channel" cmeta:id="id_00016">
         <component_ref component="potassium_channel_n_gate" cmeta:id="id_00017"/>
      </component_ref>
   </group>
   <connection>
      <map_components component_1="membrane" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="sodium_channel" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="potassium_channel" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="leakage_current" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="membrane" component_2="sodium_channel"/>
      <map_variables variable_1="V" variable_2="V"/>
      <map_variables variable_1="i_Na" variable_2="i_Na"/>
   </connection>
   <connection>
      <map_components component_1="membrane" component_2="potassium_channel"/>
      <map_variables variable_1="V" variable_2="V"/>
      <map_variables variable_1="i_K" variable_2="i_K"/>
   </connection>
   <connection>
      <map_components component_1="membrane" component_2="leakage_current"/>
      <map_variables variable_1="V" variable_2="V"/>
      <map_variables variable_1="i_Leak" variable_2="i_Leak"/>
   </connection>
   <connection>
      <map_components component_1="sodium_channel" component_2="sodium_channel_m_gate"/>
      <map_variables variable_1="m" variable_2="m"/>
      <map_variables variable_1="time" variable_2="time"/>
      <map_variables variable_1="V" variable_2="V"/>
   </connection>
   <connection>
      <map_components component_1="sodium_channel" component_2="sodium_channel_h_gate"/>
      <map_variables variable_1="h" variable_2="h"/>
      <map_variables variable_1="time" variable_2="time"/>
      <map_variables variable_1="V" variable_2="V"/>
   </connection>
   <connection>
      <map_components component_1="potassium_channel" component_2="potassium_channel_n_gate"/>
      <map_variables variable_1="n" variable_2="n"/>
      <map_variables variable_1="time" variable_2="time"/>
      <map_variables variable_1="V" variable_2="V"/>
   </connection>





<rdf:RDF>
<rdf:Description rdf:about="rdf:#bde132e3-049c-4da1-8e0a-b4d71b59075d">
<rdf:type>
<rdf:Description rdf:about="http://www.w3.org/1999/02/22-rdf-syntax-ns#Seq"/>
</rdf:type>
<rdf:_1>
<rdf:Description rdf:about="rdf:#da0ccc23-6611-4043-a2fa-3c4c3c5cd673"/>
</rdf:_1>
</rdf:Description>
<rdf:Description rdf:about="rdf:#da0ccc23-6611-4043-a2fa-3c4c3c5cd673">
<rdf:type>
<rdf:Description rdf:about="http://www.cellml.org/bqs/1.0#Person"/>
</rdf:type>
<vCard:N>
<rdf:Description rdf:about="rdf:#668ac89a-7e3f-4741-b844-d9fccc1d635d"/>
</vCard:N>
</rdf:Description>
<rdf:Description rdf:about="rdf:#e5a5bd71-3824-4f00-a109-83d494a47634">
<vCard:FN xml:lang="en">Catherine Lloyd</vCard:FN>
</rdf:Description>
<rdf:Description rdf:about="rdf:#e56a5760-9087-425d-add3-5226ae63d572">
<dc:title xml:lang="en">Journal of Physiology</dc:title>
</rdf:Description>
<rdf:Description rdf:about="rdf:#668ac89a-7e3f-4741-b844-d9fccc1d635d">
<vCard:Given xml:lang="en">D</vCard:Given>
<vCard:Family xml:lang="en">Noble</vCard:Family>
</rdf:Description>
<rdf:Description rdf:about="rdf:#bab8bf9e-26fc-484f-a5b4-2c4a97a1d123">
<dcterms:W3CDTF xml:lang="en">1962-01-01</dcterms:W3CDTF>
</rdf:Description>
<rdf:Description rdf:about="rdf:#aea6598d-b850-4aa6-9bb7-76452adba692">
<bqs:Pubmed_id xml:lang="en">14480151</bqs:Pubmed_id>
<bqs:JournalArticle>
<rdf:Description rdf:about="rdf:#9e8fe311-1b9c-477b-a358-d83c2537bbf3"/>
</bqs:JournalArticle>
</rdf:Description>
<rdf:Description rdf:about="rdf:#9e8fe311-1b9c-477b-a358-d83c2537bbf3">
<dc:creator>
<rdf:Description rdf:about="rdf:#bde132e3-049c-4da1-8e0a-b4d71b59075d"/>
</dc:creator>
<dc:title xml:lang="en">A Modification of the Hodgkin-Huxley Equations Applicable to Purkinje Fibre Action and Pace-Maker Potentials</dc:title>
<bqs:volume xml:lang="en">160</bqs:volume>
<bqs:first_page xml:lang="en">317</bqs:first_page>
<bqs:Journal>
<rdf:Description rdf:about="rdf:#e56a5760-9087-425d-add3-5226ae63d572"/>
</bqs:Journal>
<dcterms:issued>
<rdf:Description rdf:about="rdf:#bab8bf9e-26fc-484f-a5b4-2c4a97a1d123"/>
</dcterms:issued>
<bqs:last_page xml:lang="en">352</bqs:last_page>
</rdf:Description>
<rdf:Description rdf:about="rdf:#017e298c-f99c-41cf-8439-d6a0723656eb">
<dc:creator>
<rdf:Description rdf:about="rdf:#e5a5bd71-3824-4f00-a109-83d494a47634"/>
</dc:creator>
<rdf:value xml:lang="en">This is the CellML description of Noble's 1962 mathematical model of Purkinje fibre action and pace-maker potentials.  The equations formulated by Hodgkin and Huxley (1952) to describe the electrical activity of squid nerve have been modified to describe the action and pace-maker potentials of the Purkinje fibres of the heart.</rdf:value>
</rdf:Description>
<rdf:Description rdf:about="#noble_1962">
<cmeta:comment>
<rdf:Description rdf:about="rdf:#017e298c-f99c-41cf-8439-d6a0723656eb"/>
</cmeta:comment>
<bqs:reference>
<rdf:Description rdf:about="rdf:#aea6598d-b850-4aa6-9bb7-76452adba692"/>
</bqs:reference>
<bqs:reference>
<rdf:Description rdf:nodeID="n1"/>
</bqs:reference>
</rdf:Description>
<rdf:Description rdf:about="#id_00001">
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0042391"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0060075"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0030322"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0005272"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0034706"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0005248"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0001518"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0005267"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0034705"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0005249"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0008076"/>
</isVersionOf>
</rdf:Description>
<rdf:Description rdf:about="#id_00002">
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0005272"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0034706"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0005248"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0001518"/>
</isVersionOf>
</rdf:Description>
<rdf:Description rdf:about="#id_00003">
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0005272"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0034706"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0005248"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0001518"/>
</isVersionOf>
</rdf:Description>
<rdf:Description rdf:about="#id_00004">
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0005272"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0034706"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0005248"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0001518"/>
</isVersionOf>
</rdf:Description>
<rdf:Description rdf:about="#id_00005">
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0005267"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0034705"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0005249"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0008076"/>
</isVersionOf>
</rdf:Description>
<rdf:Description rdf:about="#id_00006">
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0005267"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0034705"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0005249"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0008076"/>
</isVersionOf>
</rdf:Description>
<rdf:Description rdf:about="#id_00007">
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0022840"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0005254"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0034707"/>
</isVersionOf>
</rdf:Description>
<rdf:Description rdf:about="#id_00008">
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0022840"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0005254"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0034707"/>
</isVersionOf>
</rdf:Description>
<rdf:Description rdf:about="#id_00009">
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0042391"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0060075"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0030322"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0005272"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0034706"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0005248"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0001518"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0005267"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0034705"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0005249"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0008076"/>
</isVersionOf>
</rdf:Description>
<rdf:Description rdf:about="#id_00010">
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0005272"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0034706"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0005248"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0001518"/>
</isVersionOf>
</rdf:Description>
<rdf:Description rdf:about="#id_00011">
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0005272"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0034706"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0005248"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0001518"/>
</isVersionOf>
</rdf:Description>
<rdf:Description rdf:about="#id_00012">
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0005272"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0034706"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0005248"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0001518"/>
</isVersionOf>
</rdf:Description>
<rdf:Description rdf:about="#id_00013">
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0005272"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0034706"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0005248"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0001518"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0005267"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0034705"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0005249"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0008076"/>
</isVersionOf>
</rdf:Description>
<rdf:Description rdf:about="#id_00014">
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0005272"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0034706"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0005248"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0001518"/>
</isVersionOf>
</rdf:Description>
<rdf:Description rdf:about="#id_00015">
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0005272"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0034706"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0005248"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0001518"/>
</isVersionOf>
</rdf:Description>
<rdf:Description rdf:about="#id_00016">
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0005267"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0034705"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0005249"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0008076"/>
</isVersionOf>
</rdf:Description>
<rdf:Description rdf:about="#id_00017">
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0005267"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0034705"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0005249"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0008076"/>
</isVersionOf>
</rdf:Description>
<rdf:Description rdf:about="#id_00018">
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0005267"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0034705"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0005249"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0008076"/>
</isVersionOf>
</rdf:Description>
</rdf:RDF>
</model>